OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "C3" => #1
  Channel List = C3
  Action = Select
  Channel Matching Method = Smart
#0.Signal stream -> Channel Selector "C3" => #2
  Channel List = C3
  Action = Select
  Channel Matching Method = Smart
Input 1=#1, Input 2=#2 -> Signal Merger => #3
Streamed matrix=#0.Signal stream, Input stimulation channel=#0.Stimulations -> BrainVision Format file writer (Gipsa)
  Header filename = ${__volatile_ScenarioDir}/../rawdata/4_GoNoGo_task_training_[$core{date}].vhdr
  Binary format = INT_16
#0.Stimulations -> Stimulation listener
  Log level to use = Information
Maestro => #6
  Lua Script = ${__volatile_ScenarioDir}/lua_files/6b_gonogo.lua
  baseline duration = 3
  duree_instruction = 3
Input signal=#3, Input stimulations=#6 -> Export signal Unity
  Stream name = type
  Stream type = EEG
#6 -> Stimulation listener2
  Log level to use = Information
